<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:;assembly=Extensions"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:p2="clr-namespace:AllenNeuralDynamics.HamamatsuCamera;assembly=AllenNeuralDynamics.HamamatsuCamera"
                 xmlns:p3="clr-namespace:AllenNeuralDynamics.HamamatsuCamera.Nodes;assembly=AllenNeuralDynamics.HamamatsuCamera"
                 xmlns:p4="clr-namespace:AllenNeuralDynamics.Core;assembly=AllenNeuralDynamics.Core"
                 xmlns:port="clr-namespace:Bonsai.IO.Ports;assembly=Bonsai.System"
                 xmlns:p5="clr-namespace:System.Reactive;assembly=System.Reactive.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p6="clr-namespace:AllenNeuralDynamics.Cuttlefish;assembly=AllenNeuralDynamics.Cuttlefish"
                 xmlns:ui="clr-namespace:Bonsai.Design;assembly=Bonsai.Design"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="Subject" />
        <Property Name="ChunkSize" />
        <Property Name="ChannelCount" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Init</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Subject" />
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai">
              <RootFolder>C:/output_data</RootFolder>
              <Subject>000000</Subject>
              <DateTimeOffset>0001-01-01T00:00:00.0000000+00:00</DateTimeOffset>
              <SubjectName>LoggingRootPath</SubjectName>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ChannelCount" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>5</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>ChannelCount</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="ChunkSize" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="p1:TiffWriter,sys:Nullable(sys:Int32)">
              <MemberName>ChunkSize</MemberName>
              <Value>1000</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>TiffChunkSize</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="ExternalizedMapping">
        <Property Name="SettingsPath" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Camera</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="SettingsPath" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="p2:C13440,sys:String">
              <MemberName>SettingsPath</MemberName>
              <Value>C:\git\Aind.Physiology.Hsfp\local\HSFP-default-camera-config.xml</Value>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>CameraSettingsPath</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="LookupTablePath" />
            </Expression>
            <Expression xsi:type="PropertySource" TypeArguments="p2:C13440,sys:String">
              <MemberName>LookupTablePath</MemberName>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>CameraLutPath</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraSettingsPath</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="SettingsPath" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CameraLutPath</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="LookupTablePath" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:C13440">
                <p2:Regions>
                  <p2:RegionOfInterest>
                    <p2:X>63</p2:X>
                    <p2:Y>881</p2:Y>
                    <p2:Width>1976</p2:Width>
                    <p2:Height>236</p2:Height>
                  </p2:RegionOfInterest>
                </p2:Regions>
                <p2:CropMode>Auto</p2:CropMode>
                <p2:EnableBundling>false</p2:EnableBundling>
                <p2:BundleSize>1</p2:BundleSize>
                <p2:SettingsPath>C:\local-HSFP\20260402_C13440Config_HSFP.xml</p2:SettingsPath>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p3:Frames" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>FrameCounter</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChannelCount</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Mod">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:UInt64">
                <Value>5</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:GroupBy">
              <rx:KeySelector>Item2</rx:KeySelector>
              <rx:ElementSelector>Item1</rx:ElementSelector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>ChannelCount</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="BufferSize" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="rx:ReplaySubject">
              <Name>FrameStreams</Name>
              <rx:BufferSize>5</rx:BufferSize>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:Processing">
                <p2:DeinterleaveCount>5</p2:DeinterleaveCount>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoggingRootPath</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p4:AppendModalitySuffix">
                <p4:Modality>Fib</p4:Modality>
              </Combinator>
            </Expression>
            <Expression xsi:type="Format">
              <Format>{0}/session_params_.csv</Format>
              <Selector>it</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="FileName" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p2:CsvWriter">
                <p2:FileName>C:/output_data/000000/000000_20260402T110814\fib/session_params_.csv</p2:FileName>
                <p2:Suffix>Timestamp</p2:Suffix>
                <p2:Overwrite>false</p2:Overwrite>
              </Combinator>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="12" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="12" To="23" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="13" To="18" Label="Source1" />
            <Edge From="14" To="17" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="17" To="18" Label="Source2" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="22" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source2" />
            <Edge From="23" To="28" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="28" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>IsTeensyReady</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Teensy</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:CreateSerialPort">
                <port:Name>Teensy</port:Name>
                <port:PortName>COM3</port:PortName>
                <port:BaudRate>9600</port:BaudRate>
                <port:NewLine>\r\n</port:NewLine>
                <port:Parity>None</port:Parity>
                <port:ParityReplace>63</port:ParityReplace>
                <port:DataBits>8</port:DataBits>
                <port:StopBits>One</port:StopBits>
                <port:Handshake>None</port:Handshake>
                <port:DiscardNull>false</port:DiscardNull>
                <port:DtrEnable>true</port:DtrEnable>
                <port:RtsEnable>false</port:RtsEnable>
                <port:ReadBufferSize>4096</port:ReadBufferSize>
                <port:WriteBufferSize>2048</port:WriteBufferSize>
                <port:ReceivedBytesThreshold>1</port:ReceivedBytesThreshold>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialReadLine">
                <port:PortName>Teensy</port:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>TeensyEvents</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>TeensyEvents</Name>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="StringProperty">
                <Value>s</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IsTeensyReady</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:String">
              <rx:Name>SendToTeensy</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="port:SerialWriteLine">
                <port:PortName>Teensy</port:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Timer">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>s</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SendToTeensy</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.1S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>s</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SendToTeensy</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p5:Unit">
              <rx:Name>StartExperiment</rx:Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="StringProperty">
                <Value>c</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>SendToTeensy</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>IsTeensyReady</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:SubscribeWhen" />
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="20" Label="Source1" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="23" Label="Source1" />
            <Edge From="22" To="23" Label="Source2" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Cuttlefish</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
              <rx:Name>CuttlefishCommands</rx:Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p6:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM8</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>CuttlefishEvents</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CuttlefishEvents</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="p6:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p6:CreatePinDirectionPayload">
                <p6:PinDirection>None</p6:PinDirection>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CuttlefishCommands</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.05S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="p6:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="p6:CreateEnableRisingEdgeEventsPayload">
                <p6:EnableRisingEdgeEvents>Pin0</p6:EnableRisingEdgeEvents>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CuttlefishCommands</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p5:Unit">
              <rx:Name>TriggerReadDump</rx:Name>
            </Expression>
            <Expression xsi:type="harp:CreateMessage">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Payload xsi:type="harp:CreateOperationControlPayload">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:MuteReplies>false</harp:MuteReplies>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:Heartbeat>Enabled</harp:Heartbeat>
              </harp:Payload>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CuttlefishCommands</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>StartExperiment</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Delay">
                <rx:DueTime>PT0.5S</rx:DueTime>
              </Combinator>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>TriggerReadDump</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Logging.bonsai" />
      <Expression xsi:type="SubscribeSubject">
        <Name>StartExperiment</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="p5:Unit">
        <rx:Name>EndExperiment</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="StringProperty">
          <Value>s</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>SendToTeensy</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:TakeUntil" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="IncludeWorkflow" Path="Extensions\Visualizer.bonsai">
        <Channel0>
          <Rect>
            <X>1475</X>
            <Y>30</Y>
            <Width>147</Width>
            <Height>53</Height>
          </Rect>
        </Channel0>
        <Channel1>
          <Rect>
            <X>863</X>
            <Y>44</Y>
            <Width>324</Width>
            <Height>41</Height>
          </Rect>
        </Channel1>
        <Channel2>
          <Rect>
            <X>557</X>
            <Y>44</Y>
            <Width>383</Width>
            <Height>53</Height>
          </Rect>
        </Channel2>
        <Channel3>
          <Rect>
            <X>526</X>
            <Y>52</Y>
            <Width>306</Width>
            <Height>41</Height>
          </Rect>
        </Channel3>
        <Channel4>
          <Rect>
            <X>428</X>
            <Y>49</Y>
            <Width>265</Width>
            <Height>58</Height>
          </Rect>
        </Channel4>
      </Expression>
      <Expression xsi:type="ui:VisualizerWindow">
        <ui:Visible>true</ui:Visible>
        <ui:Location xsi:nil="true" />
        <ui:Size xsi:nil="true" />
        <ui:WindowState xsi:nil="true" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:DelaySubscription">
          <rx:DueTime>PT0.5S</rx:DueTime>
        </Combinator>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
      <Edge From="3" To="5" Label="Source1" />
      <Edge From="4" To="5" Label="Source2" />
      <Edge From="8" To="10" Label="Source1" />
      <Edge From="9" To="10" Label="Source2" />
      <Edge From="10" To="16" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source1" />
      <Edge From="21" To="22" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>